PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280,1024]
  expName = AO_human_v_robot
  keyboardBackend = ioHub
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Routines
  Routine stimLoader
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    CodeComponent codeLoader
      Code Type = Py
      Begin Experiment:
        blockList = [];
        conditionList = [];
        stimList = [];
        stimDirList=[];
        catchtrialQList = [];
        markerValList = [];

        N_block = 10
      Begin Routine:
        stimList.append(stimulus);
        conditionList.append(condition);
        stimDirList.append(stimDir);
        blockList.append(block);
        catchtrialQList.append(catchtrialQ);
        markerValList.append(markerVal);
  Routine welcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press Space to start the experiment
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeSetup
      Code Type = Py
      Before Experiment:
        from collections import Counter
      Begin Experiment:
        blockLenList = []
      Begin Routine:
        counts = Counter(blockList)

        countBlockList = [counts[i] for i in range(10)] # count the number of trials within each block
  Routine breakPeriod
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    CodeComponent codeBreakCD
      Code Type = Py
      Begin Experiment:
        progVal = 0

        breakLength = 15 + 1
        breakCD = breakLength
      Begin Routine:
        progVal = counterBlock / N_block

        breakCD = breakCD -1
    TextComponent textBreak
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Let's have 15-second break.

        After this break, focus on the white cross at the center.
    TextComponent textBreakCD
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $breakCD
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    ProgressComponent prog
      anchor = center left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.3, -0.25)
      progress [set every repeat] = progVal
      size = (0.6, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    TextComponent textProg
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Your progress
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    KeyboardComponent skipBreak
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine endBlock
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    CodeComponent codeEndBlock
      Code Type = Py
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      Begin Routine:
        counterBlock += 1
      End Routine:
        breakCD = breakLength
  Routine fixationCross
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    PolygonComponent crossFixation
      durationEstim = 0.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationLen
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    CodeComponent codeFixation
      Code Type = Auto->JS
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      Begin Routine:
        fixationLen = round(random.uniform(0.35, 0.65),3)
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $fixationLen
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  Routine stimVid
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    CodeComponent codeStim
      Code Type = Py
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      Begin Experiment:
        counterStim = 0
      Begin Routine:
        #print(f"======= counterBlock {counterBlock} - condition: {condBlockList[counterBlock]} =======")
        ##print('Condition: ', dictBlockList[counterBlock]['conditions'])
        #
        #counterStim = 0

        print(stimDirList[counterStim])
    MovieComponent stimMovie
      backend = ffpyplayer
      durationEstim = 5
      forceEndRoutine = True
      movie [set every repeat] = $stimDirList[counterStim]
      size = (1.125, 0.63)
      startVal [time (s)] = 0.0
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    KeyboardComponent skipStim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine interTrialInterval
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    TextComponent text
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ITI
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    KeyboardComponent skipITI
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent codeEndTrial
      Code Type = Py
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      Begin Routine:
        counterStim += 1
  Routine blockSetup
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    CodeComponent codeBlockSetup
      Code Type = Py
      Begin Experiment:
        counterBlock = 0
      Begin Routine:
        N_trial = countBlockList[counterBlock]
  Routine catchtrialQues
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if catchtrialQList[counterStim] == 'no':
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Show catch trial question
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Flow
  LoopInitiator loopLoader loopType="TrialHandler"
    conditionsFile = stim_table_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 0, 'condition': 'robot_left', 'stimulus': 'robot_left_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/robot_left_0.mp4'},
      {'block': 0, 'condition': 'human_left', 'stimulus': 'human_left_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/human_left_2.mp4'},
      {'block': 1, 'condition': 'robot_left', 'stimulus': 'robot_left_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/robot_left_2.mp4'},
      {'block': 1, 'condition': 'robot_right', 'stimulus': 'robot_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/robot_right_0.mp4'},
      {'block': 2, 'condition': 'robot_right', 'stimulus': 'robot_right_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_right_3.mp4'},
      {'block': 2, 'condition': 'robot_left', 'stimulus': 'robot_left_1', 'stimValue': 1, 'stimLabel': 'forward-backward swing', 'stimDir': './stimuli/robot_left_1.mp4'},
      {'block': 3, 'condition': 'robot_right', 'stimulus': 'robot_right_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/robot_right_2.mp4'},
      {'block': 3, 'condition': 'human_right', 'stimulus': 'human_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/human_right_0.mp4'},
      {'block': 4, 'condition': 'human_right', 'stimulus': 'human_right_4', 'stimValue': 4, 'stimLabel': 'waving', 'stimDir': './stimuli/human_right_4.mp4'}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
    Routine stimLoader
  LoopTerminator loopLoader
  Routine welcomeScreen
  LoopInitiator loopBlock loopType="TrialHandler"
    loopType = sequential
    nReps = N_block
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    Routine blockSetup
    LoopInitiator loopBreakCD loopType="TrialHandler"
      loopType = sequential
      nReps = breakLength
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      Routine breakPeriod
    LoopTerminator loopBreakCD
    LoopInitiator loopTrial loopType="TrialHandler"
      loopType = sequential
      nReps = N_trial
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      Routine fixationCross
      Routine stimVid
      Routine catchtrialQues
      Routine interTrialInterval
    LoopTerminator loopTrial
    Routine endBlock
  LoopTerminator loopBlock
